PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'],expInfo['School'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'School': '', 'Audio': "['Yes', 'No']", 'Debug': "['No', 'Yes']", 'Show boxes': "['No', 'Yes']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/imgs/slides/slide-03b.png', 'resources/seqs/conditions.csv', 'resources/imgs/slides/slide-00-intr.png', 'resources/imgs/slides/slide-00-title.png', 'resources/imgs/slides/slide-01.png', 'resources/imgs/slides/slide-02.png', 'resources/imgs/slides/slide-03.png', 'resources/imgs/slides/slide-03b.png', 'resources/imgs/slides/slide-04.png', 'resources/imgs/slides/slide-05.png', 'resources/imgs/slides/slide-06.png', 'resources/imgs/slides/slide-07.png', 'resources/imgs/slides/slide-08.png', 'resources/imgs/slides/slide-09.png', 'resources/imgs/slides/slide-10.png', 'resources/imgs/slides/slide-11.png', 'resources/imgs/slides/slide-12.png', 'resources/imgs/slides/slide-13.png', 'resources/imgs/slides/slide-14.png', 'resources/imgs/slides/slide-15.png', 'resources/imgs/slides/slide-16.png', 'resources/imgs/slides/slide-17.png', 'resources/imgs/slides/slide-18.png', 'resources/imgs/slides/slide-19.png', 'resources/imgs/slides/slide-20.png', 'resources/imgs/slides/slide-21.png', 'resources/imgs/slides/slide-22.png', 'resources/imgs/slides/slide-23.png', 'resources/imgs/slides/slide-24.png', 'resources/imgs/next.png', 'resources/aud/slide-00-intr.m4a', 'resources/aud/slide-00-title.m4a', 'resources/aud/slide-01.m4a', 'resources/aud/slide-02.m4a', 'resources/aud/slide-03.m4a', 'resources/aud/slide-03b.m4a', 'resources/aud/slide-04.m4a', 'resources/aud/slide-05.m4a', 'resources/aud/slide-06.m4a', 'resources/aud/slide-06b.m4a', 'resources/aud/slide-07.m4a', 'resources/aud/slide-08.m4a', 'resources/aud/slide-10.m4a', 'resources/aud/slide-11.m4a', 'resources/aud/slide-12.m4a', 'resources/aud/slide-13.m4a', 'resources/aud/slide-14.m4a', 'resources/aud/slide-15.m4a', 'resources/aud/slide-16.m4a', 'resources/aud/slide-17.m4a', 'resources/aud/slide-18.m4a', 'resources/aud/slide-19.m4a', 'resources/aud/slide-20.m4a', 'resources/aud/slide-21.m4a', 'resources/aud/slide-22.m4a', 'resources/aud/slide-23.m4a', 'resources/aud/slide-24.m4a']
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = white
  expName = theory-of-mind
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        y_offset = -0.02
        control_scores = []
        current_total_score = 0

        #SLIDE_GROUPS = [
        #    None,
        #    [1, 2],
        #    [3],
        #    [4, 5],
        #    [6,7, 8, 9, 10, 11],
        #    [12],
        #    [13],
        #    [14, 15, 16, 17, 18],
        #    [19],
        #    [20],
        #    [21, 22],
        #    [23],
        #    [24],
        #]

        SLIDE_GROUPS = [
            None,
            [1, 2],#trial 1
            [3], #trial 2
            [301],#trial number 3, code for its slide name 3b
            [4, 5],
            [6,7, 8, 9, 10, 11],
            [12],
            [13],
            [14, 15, 16, 17, 18],
            [19],
            [20],
            [21, 22],
            [23],
            [24],
        ]
      Begin Routine:
        trials.addData("expVersion", expVersion)

        cimgs = None
        cimg_names = []
        mouse_over = "_"
        slide_t = 0
        response = None
        response_time = None

        slide_name = ''

        slide_nums = SLIDE_GROUPS[int(trialNum)]
        slides = []
        for i in slide_nums:
            i = i if i > 9 else f"0{i}"
            if i == 301:
                i = '03b'
            slide_name = f"slide-{i}"
            slides.append(make_slide(slide_name))

        n_slides = len(slide_nums)
        idx = 0
        idx_prev = None
        slides[idx].autoDraw = True

        NEXT_BUTTON.pos = NEXT_BUTTON_POS
        NEXT_BUTTON.opacity = 1 if n_slides > 1 else 0.1
        NEXT_BUTTON.autoDraw = True

        if USE_AUDIO:
            play_6b_once = True
            auto_9_once = True
            aud_file = f"{AUD_DIR}/{slides[idx].name}.m4a"
            SOUND = make_sound(slides[idx].name, aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_T = 0
            SOUND.play()

        for qn_num in [2, 6, 7]:
            if int(testQn) == qn_num \
            and control_scores[-1] != 1:
                continueRoutine = False  # Skip test qn

        for qn_num in [4, 5]:
            if int(testQn) == qn_num \
            and control_scores[-1] != 1 \
            and control_scores[-2] != 1:
                continueRoutine = False  # Skip test qn
      Each Frame:
        # Workarounds
        if USE_AUDIO:
            if play_6b_once \
            and slides[idx].name == "slide-06" \
            and t - SOUND_T > SOUND_DUR:
                play_6b_once = False
                aud_file = f"{AUD_DIR}/{slides[idx].name}b.m4a"
                SOUND = make_sound(slides[idx].name, aud_file)
                SOUND_DUR = SOUND.getDuration()
                SOUND_T = t
                SOUND.play()
            if auto_9_once \
            and slides[idx].name == "slide-08" \
            and t - SOUND_T > 8:
                auto_9_once = False
                idx_prev = idx
                idx += 1
                slides[idx_prev].autoDraw = False
                slides[idx].autoDraw = True
                NEXT_BUTTON.autoDraw = False
                NEXT_BUTTON.autoDraw = True
                NEXT_BUTTON.opacity = 0.1
                if n_slides - idx != 1:
                    NEXT_BUTTON.opacity = 1

        # Last slide in series will contain the options
        if cimgs is None and n_slides - idx == 1:
            slide_t = t
            cimgs = q_slides[slides[idx].name]()
            y_offset = -0.02
            if slides[idx].name == "slide-03":
                y_offset = 0.02
            for i in [20, 23, 24]:
                if slides[idx].name == f"slide-{i}":
                    y_offset = -0.01
                    break
            radio0s = make_radios(make_radio0, cimgs[:2], [], y_offset)
            radio0s = make_radios(make_radio0, cimgs[2:], radio0s, y_offset)
            radio1s = make_radios(make_radio1, cimgs[:2], [], y_offset)
            radio1s = make_radios(make_radio1, cimgs[2:], radio1s, y_offset)
            for i in range(len(cimgs)):
                radio0s[i].autoDraw = True
                cimgs[i].autoDraw = True
                cimg_names.append(cimgs[i].name)

        # Detect valid click from scratch
        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L == 1:
                if n_slides - idx == 1:
                    if response is not None and NEXT_BUTTON.contains(MOUSE):
                        continueRoutine = False
                    for i in range(len(cimgs)):
                        if cimgs[i].contains(MOUSE) or radio0s[i].contains(MOUSE):
                            response = cimgs[i].name
                            response_time = t - slide_t
                            NEXT_BUTTON.opacity = 1
                        for radio in radio1s:
                            radio.autoDraw = False
                            if response == radio.name:
                                radio.autoDraw = True
                elif NEXT_BUTTON.contains(MOUSE):
                    idx_prev = idx
                    idx += 1
                    slides[idx_prev].autoDraw = False
                    slides[idx].autoDraw = True
                    if USE_AUDIO and slides[idx].name != "slide-09":
                        if t - SOUND_T < SOUND_DUR:
                            SOUND.stop()
                        aud_file = f"{AUD_DIR}/{slides[idx].name}.m4a"
                        SOUND = make_sound(slides[idx].name, aud_file)
                        SOUND_DUR = SOUND.getDuration()
                        SOUND_T = t
                        SOUND.play()
                    NEXT_BUTTON.autoDraw = False
                    NEXT_BUTTON.autoDraw = True
                    NEXT_BUTTON.opacity = 0.1
                    if n_slides - idx != 1:
                        NEXT_BUTTON.opacity = 1

        # TODO: "Back" button

        mouse_over = "_"
        if cimgs is not None:
            for cimg in cimgs:
                if cimg.contains(MOUSE):
                    mouse_over = cimg.name
                    cimg.opacity = BOUND_BOX_OPACITY
                else:
                    cimg.opacity = CLICK_BOX_OPACITY

        if SHOW_DEBUG:
            trial_text.text = f"""
        taskNum = {taskNum}
        qnNum = {qnNum}
        aud_file = {aud_file}
        SOUND_DUR = {round(SOUND_DUR, 3)}
        slides[{idx}].name = {slides[idx].name}
        cimg_names = {cimg_names}
        corrAns1 = {corrAns1}
        response = {response}
        mouse_over = {mouse_over}
        response_time = {round(response_time, 3)}
        t = {round(t, 3)}
        current_total_score = {current_total_score}
        """
      End Routine:
        for cimg in cimgs:
            cimg.size = (0, 0)
            cimg.autoDraw = False

        slides[idx].size = (0, 0)
        slides[idx].autoDraw = False
        NEXT_BUTTON.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()

        is_correct = 1 if response == corrAns1 else 0
        if is_correct != 1 and corrAns2 != "NA":
            is_correct = 1 if response == corrAns2 else 0

        trials.addData("response", response)
        if controlQn != "NA":
            control_scores.append(is_correct)
            trials.addData("control_score", is_correct)
            trials.addData("test_score", None)  # For column order
            trials.addData("current_total_score", None)  # For column order
        if testQn != "NA":
            current_total_score += is_correct
            trials.addData("control_score", None)  # For column order
            trials.addData("test_score", is_correct)
            trials.addData("current_total_score", current_total_score)
        trials.addData("response_time", response_time)
    CodeComponent trial_anim
      Code Type = Auto->JS
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      Begin Experiment:
        aimgs = None
        starts = None
        ends = None

        def anim_03b():
            # Slide 03b
            #names = ["box_pattern", "box_options"]
            #xys = [(0.015, 0.15), (0, -0.22)]
            #sizes = [(0.22, 0.25), (0.9, 0.30)]
            #start_times = [2, 6]
            #end_times = [5, 8]

            names = ["box_pattern"]
            xys = [(-0.009, 0.19)]
            sizes = [(0.5, 0.26)]
            start_times = [2]
            end_times = [5]
            return make_boxes(names, xys, sizes, 1, "red"), start_times, end_times

        all_anims = {
            "slide-03b": anim_03b,

        }
      Begin Routine:
        key = slide_name

        if USE_AUDIO and key in all_anims:
            run_anim = True
            if key == 'slide-03b':
                aimgs, starts, ends = all_anims[key]()
      Each Frame:
        #if run_anim:
        #    for i in range(len(aimgs)):
        #        if t >= starts[i]:
        #            aimgs[i].autoDraw = True
        #        if t >= ends[i]:
        #            aimgs[i].autoDraw = False

        if run_anim:
            for i in range(len(aimgs)):
                if t >= starts[i]:
                    aimgs[i].autoDraw = True
                if t >= ends[i]:
                    aimgs[i].autoDraw = False
      End Routine:
        if run_anim:
            run_anim = False
    TextComponent trial_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        expVersion = "2022.09.26"
        AUD_DIR = "resources/aud"
        IMGS_DIR = "resources/imgs"
        SLIDES_DIR = f"{IMGS_DIR}/slides"
        SEQ_FILE = "resources/seqs/conditions.csv"

        SHOW_DEBUG = expInfo["Debug"] == "Yes"
        USE_AUDIO = expInfo["Audio"] == "Yes"
        SHOW_BOUND_BOX = expInfo["Show boxes"] == "Yes"

        CLICK_BOX_OPACITY = 0.2 if SHOW_DEBUG else 0
        BOUND_BOX_OPACITY = 1 if SHOW_BOUND_BOX else 0

        """
        Slides are 1001 x 563 pixels.
        Positions and sizes of clickable areas are hard
        coded, so changing this will break _everything_!

        """
        SLIDE_H = 0.75
        SLIDE_W = SLIDE_H / 563 * 1001
        SLIDE_SIZE = (SLIDE_W, SLIDE_H)

        # "Next" button
        NEXT_POS = (0.573, 0.315)
        #NEXT_POS = (0, -0.38)
        #NEXT_POS = (0, -0.2)

        #NEXT_SIZE = (0.1 / 127 * 192, 0.1)  # 192 x 127
        #NEXT_SIZE = (0.215, 0.1)
        NEXT_SIZE = (0.165, 0.075)
        NEXT = make_rect("next", NEXT_POS, NEXT_SIZE, CLICK_BOX_OPACITY);


        #NEXT BUTTON
        NEXT_BUTTON_POS = (0, -0.38)
        #NEXT_BUTTON_SIZE = (0.215, 0.1)
        NEXT_BUTTON_SIZE = (((0.1 / 127) * 192), 0.1)
        NEXT_BUTTON = make_img("next", f"{IMGS_DIR}/next.png", NEXT_POS, NEXT_SIZE, None)


        # "Replay" button at top-left
        REPLAY_POS = (-0.376, 0.265)
        REPLAY_SIZE = (0.165, 0.075)
        REPLAY = make_rect("replay", REPLAY_POS, REPLAY_SIZE, CLICK_BOX_OPACITY)

        # For covering "Next" button
        COVER_SIZE = (0.17, 0.08)
        COVER = make_rect("cover", NEXT_POS, COVER_SIZE, None, "white", 0, "white")

        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0

        # Global sound
        SOUND = None
      Begin Routine:
        slide = make_slide(f"slide-00-intr")
        slide.autoDraw = True

        NEXT.autoDraw = True

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/slide-00-intr.m4a"
            SOUND = make_sound("slide-00-intr", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_T = 0
            SOUND.play()
      Each Frame:
        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L == 1 and NEXT.contains(MOUSE):
                continueRoutine = False
      End Routine:
        slide.autoDraw = False
        NEXT.autoDraw = False
        NEXT.pos = NEXT_POS

        if USE_AUDIO:
            SOUND.stop()
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_button(name, text, pos, size):
            return visual.ButtonStim(
                win=win,
                text=text,
            #    font="Arvo",
                pos=pos,
                letterHeight=0.05,
                size=size,
                borderWidth=0.005,
                fillColor="lightgrey",
                borderColor="darkgrey",
                color="black",
                colorSpace="rgb",
                opacity=None,
                bold=True,
                italic=False,
                padding=None,
                anchor="center",
                name=name
            )

        def make_sound(name, filepath):
            return sound.Sound(
                win=win,
                value=filepath,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def make_slide(name, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(
                name,
                f"{SLIDES_DIR}/{name}.png",
                pos, size, 1
            )

        def make_rect(
            name, pos, size, opacity,
            lineColor="green",
            lineWidth=3,
            fillColor=None
        ):
            if fillColor is not None:
                fillColor = util.Color(fillColor)
            if lineColor is not None:
                lineColor = util.Color(lineColor)
            return visual.Rect(
                win=win,
                name=name,
                width=size[0],
                height=size[1],
                pos=pos,
                lineWidth=lineWidth,
                lineColor=lineColor,
                fillColor=fillColor,
                opacity=opacity
            )

        def make_boxes(names, xys, sizes, opacity=CLICK_BOX_OPACITY, lineColor="green"):
            cimgs = []
            for i in range(len(names)):
                cimgs.append(make_rect(names[i], xys[i], sizes[i], opacity, lineColor))
            return cimgs

        def make_circle(
            name, pos, size,
            fillColor="black",
            lineColor="black",
            lineWidth=3,
            opacity=1
        ):
            if lineColor is not None:
                lineColor = util.Color(lineColor)
            if fillColor is not None:
                fillColor = util.Color(fillColor)
            return visual.Polygon(
                win=win,
                name=name,
                edges=360,
                size=size,
                pos=pos,
                lineWidth=lineWidth,
                lineColor=lineColor,
                fillColor=fillColor,
                opacity=opacity
            )

        def make_radio0(name, pos):
            return make_circle(name, pos, (0.03, 0.03), None, "black")

        def make_radio1(name, pos):
            return make_circle(name, pos, (0.023, 0.023), "black", None, 0)

        def find_min_y(cimgs):
            min_y = 0.5
            for cimg in cimgs:
                y = cimg.pos[1] - (cimg.height / 2)
                if min_y > y:
                    min_y = y
            return min_y

        def make_radios(func, cimgs, res=[], offset=-0.05):
            min_y = find_min_y(cimgs)
            for cimg in cimgs:
                radio_y = min_y + offset
                res.append(func(cimg.name, (cimg.pos[0], radio_y)))
            return res
    CodeComponent specs_TOM
      Code Type = Auto->JS
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      Begin Experiment:
        # TOM

        def get_slide02():
            names = ["cake", "lollipop", "cookie", "chocolate_bar"]
            xys = [(-0.13, 0.145), (0.0925, 0.1475), (-0.1375, -0.0625), (0.0825, -0.06125)]
            sizes = [(0.15, 0.13), (0.07, 0.14), (0.18, 0.08), (0.14, 0.09)]
            return make_boxes(names, xys, sizes)

        def get_slide03():
            #names = ["happy", "sad", "scared", "angry"]
            #xys = [(-0.17, 0.15), (0.06, 0.15), (-0.17, -0.05), (0.06, -0.05)]
            #sizes = [(0.19, 0.19), (0.19, 0.19), (0.19, 0.19), (0.19, 0.19)]

            names = ["scared", "angry", "happy", "sad"]
            xys = [(-0.16, 0.18), (0.126, 0.18), (-0.152, -0.103), (0.126, -0.105)]
            sizes = [(0.19, 0.288), (0.19, 0.288), (0.180, 0.270), (0.193, 0.278)]
            return make_boxes(names, xys, sizes)

        def get_slide03b():

            names = ["happy", "angry" ]
            xys = [ (-0.212, -0.153),(0.180, -0.143)]
            sizes = [ (0.19, 0.280), (0.196, 0.270)]
            return make_boxes(names, xys, sizes)

        def get_slide05():
            names = ["table", "chair", "desk", "drawer"]
            xys = [(-0.1675, 0.155), (0.1125, 0.17), (-0.1675, -0.06), (0.13, -0.0525)]
            sizes = [(0.24, 0.12), (0.125, 0.21), (0.26, 0.13), (0.2, 0.14)]
            return make_boxes(names, xys, sizes)

        def get_slide11():
            names = ["table", "chair", "desk", "drawer"]
            xys = [(-0.1275, 0.1425), (0.09, 0.15), (-0.125, -0.06), (0.095, -0.05)]
            sizes = [(0.19, 0.11), (0.11, 0.19), (0.205, 0.12), (0.14, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_slide18():
            names = ["train", "wagon", "truck", "airplane"]
            xys = [(-0.15, 0.205), (0.1675, 0.2025), (-0.16, -0.06), (0.17, -0.055)]
            sizes = [(0.34, 0.12), (0.23, 0.18), (0.2, 0.135), (0.245, 0.145)]
            return make_boxes(names, xys, sizes)

        def get_slide20():
            names = ["happy", "sad", "scared", "mad"]
            xys = [(-0.14, 0.19), (0.13, 0.19), (-0.14, -0.06), (0.13, -0.06)]
            sizes = [(0.2, 0.23), (0.2, 0.23), (0.2, 0.23), (0.2, 0.23)]
            return make_boxes(names, xys, sizes)

        def get_slide22():
            names = ["train", "wagon", "truck", "airplane"]
            xys = [(-0.16, 0.175), (0.155, 0.17), (-0.17, -0.09), (0.155, -0.085)]
            sizes = [(0.34, 0.12), (0.23, 0.18), (0.2, 0.135), (0.245, 0.145)]
            return make_boxes(names, xys, sizes)

        def get_slide23():
            names = ["happy", "sad", "scared", "mad"]
            xys = [(-0.15, 0.185), (0.13, 0.185), (-0.15, -0.065), (0.13, -0.065)]
            sizes = [(0.2, 0.23), (0.2, 0.23), (0.2, 0.23), (0.2, 0.23)]
            return make_boxes(names, xys, sizes)

        q_slides = {
            "slide-02": get_slide02,
            "slide-03": get_slide03,
            "slide-03b": get_slide03b,
            "slide-05": get_slide05,
            "slide-11": get_slide11,
            "slide-12": get_slide11,
            "slide-13": get_slide11,
            "slide-18": get_slide18,
            "slide-19": get_slide18,
            "slide-20": get_slide20,
            "slide-22": get_slide22,
            "slide-23": get_slide23,
            "slide-24": get_slide23,
        }
    TextComponent begin_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine slide_title
    CodeComponent slide_title_2
      Code Type = Auto->JS
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      Begin Experiment:
        #for title slide and 1st trial slide
        #NEXT_BUTTON_POS = (0, -0.2)

        #for trial slides
        NEXT_BUTTON_POS = (0, -0.38)
        #NEXT_BUTTON_SIZE = (0.215, 0.1)
        NEXT_BUTTON_SIZE = (((0.1 / 127) * 192), 0.1)
        NEXT_BUTTON = make_img("next", f"{IMGS_DIR}/next.png", NEXT_POS, NEXT_SIZE, None)
        #NEXT_BUTTON = make_button("next", "Next", NEXT_BUTTON_POS, NEXT_BUTTON_SIZE)
      Begin Routine:
        slide = make_slide(f"slide-00-title")
        slide.autoDraw = True

        NEXT_BUTTON.pos= (0, -0.2)
        NEXT_BUTTON.autoDraw = True

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/slide-00-title.m4a"
            SOUND = make_sound("slide-00-title", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_T = 0
            SOUND.play()
      Each Frame:
        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L == 1 and NEXT_BUTTON.contains(MOUSE):
                continueRoutine = False
      End Routine:
        slide.autoDraw = False
        NEXT_BUTTON.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()
    TextComponent slide_title_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:
    conditionsFile = $SEQ_FILE
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
